CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Dye>.*)_(?P<Field>[0-9]{1,3})(?P<d>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[//](?P<FOLDER>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dapi")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "a488")
    Name to assign these images:Top2A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'Without DYE and FRAME']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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Field
    Metadata category:d
    Metadata category:FOLDER

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:300
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:6|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei

DisplayHistogram:[module_num:7|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
    Select the object whose measurements will be displayed:Nuclei
    Select the object measurement to plot:Intensity_MeanIntensity_DNA
    Number of bins:50
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

FilterObjects:[module_num:8|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
    Select the objects to filter:Nuclei
    Name the output objects:Nuclei2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DNA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.13
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei2

DisplayHistogram:[module_num:10|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
    Select the object whose measurements will be displayed:Nuclei
    Select the object measurement to plot:Intensity_StdIntensity_DNA
    Number of bins:50
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

FilterObjects:[module_num:11|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
    Select the objects to filter:Nuclei2
    Name the output objects:Nuclei3
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_StdIntensity_DNA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.035
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:Nuclei3
    Calculate the Zernike features?:No

DisplayHistogram:[module_num:13|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
    Select the object whose measurements will be displayed:Nuclei3
    Select the object measurement to plot:AreaShape_Area
    Number of bins:50
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

FilterObjects:[module_num:14|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
    Select the objects to filter:Nuclei3
    Name the output objects:Nuclei4
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:700

MaskObjects:[module_num:15|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
    Select objects to be masked:Nuclei
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei4
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:16|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei4

MeasureObjectIntensity:[module_num:17|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
    Hidden:1
    Select an image to measure:Top2A
    Select objects to measure:Nuclei4

MeasureObjectIntensity:[module_num:18|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:MaskedNuclei

MeasureObjectIntensity:[module_num:19|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
    Hidden:1
    Select an image to measure:Top2A
    Select objects to measure:MaskedNuclei

MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:Nuclei4
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:21|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
    Select objects to measure:MaskedNuclei
    Calculate the Zernike features?:No

RelateObjects:[module_num:22|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enabled:False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
    Parent objects:Nuclei
    Child objects:Foci_a488
    Name the output object:a488_fam
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:23|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enabled:False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
    Parent objects:Nuclei
    Child objects:Foci_tmr
    Name the output object:tmr_fam
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RescaleIntensity:[module_num:24|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
    Select the input image:DNA
    Name the output image:DNA_R
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:25|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enabled:False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
    Select the input image:Top2A
    Name the output image:Top2A_R
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA_R
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei
    Select outline color:Green
    Select objects to display:Nuclei2
    Select outline color:Blue
    Select objects to display:Nuclei3
    Select outline color:Yellow
    Select objects to display:Nuclei4

OverlayOutlines:[module_num:27|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA_R
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:MaskedNuclei

OverlayOutlines:[module_num:28|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Top2A_R
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei
    Select outline color:#03B8FC
    Select objects to display:Nuclei3

ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|\g<FOLDER>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei4|Number_Object_Number,Nuclei4|Intensity_IntegratedIntensity_DNA,Nuclei4|Intensity_IntegratedIntensity_Top2A,Nuclei4|Intensity_MedianIntensity_DNA,Nuclei4|Intensity_MedianIntensity_Top2A,Nuclei4|Intensity_MeanIntensity_DNA,Nuclei4|Intensity_MeanIntensity_Top2A,Nuclei4|AreaShape_Area,Image|Count_Nuclei,Image|Group_Number,Image|FileName_DNA,Image|FileName_Top2A,Image|Metadata_Field,Image|Metadata_Dye,Image|Metadata_FOLDER,MaskedNuclei|Number_Object_Number,MaskedNuclei|Intensity_IntegratedIntensity_DNA,MaskedNuclei|Intensity_IntegratedIntensity_Top2A,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Nuclei4
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MaskedNuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay1
    Select method for constructing file names:Single name
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    Enter single file name:\g<Field>_dapi
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:tmr
    Select method for constructing file names:Single name
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    Enter single file name:\g<Field>_tmr
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay1
    Select method for constructing file names:Single name
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    Enter single file name:\g<Field>_tmr_overlay
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:33|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:a488
    Select method for constructing file names:Single name
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    Enter single file name:\g<Field>_a488
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:34|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay2
    Select method for constructing file names:Single name
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    Enter single file name:\g<Field>_a488_overlay
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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