CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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notes:[' qTo begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:30_(?P<Channel>.*)_(?P<Field>.*)_max.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[/]max_intensity_projections_(?P<FOLDER>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dapi")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tmr")
    Name to assign these images:channel_1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "a488")
    Name to assign these images:channel_2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'Without DYE and FRAME']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Field
    Metadata category:FOLDER

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):100,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,0.02
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:300
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:6|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notes:['']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
    Select the input image:channel_1
    Name the primary objects to be identified:foci_1
    Typical diameter of objects, in pixel units (Min,Max):2,45
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:channel_2
    Name the primary objects to be identified:foci_2
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:nuclei

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:nuclei
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:channel_1
    Select objects to measure:foci_1

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:channel_2
    Select objects to measure:foci_2

RelateObjects:[module_num:12|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
    Parent objects:nuclei
    Child objects:foci_1
    Name the output object:foci_1_children
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:13|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
    Parent objects:nuclei
    Child objects:foci_2
    Name the output object:foci_2_children
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:Overlay_nuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:nuclei
    Select outline color:yellow
    Select objects to display:foci_1

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:channel_1
    Name the output image:Overlay_first_dye
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:nuclei
    Select outline color:#03B8FC
    Select objects to display:foci_1

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:channel_2
    Name the output image:Overlay_second_dye
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:nuclei
    Select outline color:#03B8FC
    Select objects to display:foci_2

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:Overlay_all_foci
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:nuclei
    Select outline color:yellow
    Select objects to display:foci_1
    Select outline color:#90EE90
    Select objects to display:foci_2

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Group_Number,Image|FileName_DNA,Image|Metadata_Field,Image|Metadata_Dye,Image|Metadata_FOLDER,nuclei|Number_Object_Number,nuclei|Intensity_IntegratedIntensity_DNA,nuclei|Intensity_MedianIntensity_DNA,nuclei|Intensity_MeanIntensity_DNA,nuclei|AreaShape_Area,nuclei|Children_foci_1_Count,nuclei|Children_foci_2_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Overlay_Nuclei
    Select method for constructing file names:Single name
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    Enter single file name:\g<Field>_Overlay_nuclei
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Overlay_first_dye
    Select method for constructing file names:Single name
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    Enter single file name:\g<Field>_Overlay_first_dye
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Overlay_second_dye
    Select method for constructing file names:Single name
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    Enter single file name:\g<Field>_Overlay_second_dye
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:Overlay_all_foci
    Select method for constructing file names:Single name
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    Enter single file name:\g<Field>_Overlay_all_foci
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<FOLDER>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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